OSMAPOSLParameters :=

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := Utahscat600k_ca_seg4.hs

zero end planes of segment 0:= 1

; if disabled, defaults to maximum segment number in the file
maximum absolute segment number to process := 3

; choose size of pixels
; x,y pixel size = zoom * bin_size
zoom := .7
; number of x,y pixels (-1 takes default value to cover the FOV)
xy output image size (in pixels) := 60

; change to STIR 2.x default for compatibility 
use subset sensitivities:=0
sensitivity filename:= my_RPTsens_seg3_PM.hv
recompute sensitivity := 1

projector pair type := Matrix
  Projector Pair Using Matrix Parameters :=
  Matrix type := Ray Tracing
  Ray tracing matrix parameters :=
   number of rays in tangential direction to trace for each bin := 2
  End Ray tracing matrix parameters :=
  End Projector Pair Using Matrix Parameters :=

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

output filename prefix := my_test_image_PM_MRP

number of subsets:= 12
start at subset:= 0
number of subiterations:= 1
save estimates at subiteration intervals:= 1
start at subiteration number:=2

END :=
