OSMAPOSLParameters :=

objective function type:= PoissonLogLikelihoodWithLinearModelForMeanAndProjData
PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

input file := Utahscat600k_ca_seg4.hs
; if disabled, defaults to maximum segment number in the file
maximum absolute segment number to process := 4
zero end planes of segment 0:= 1

projector pair type := Separate Projectors
 projector pair using separate projectors parameters :=
 forward projector type := Ray Tracing
 forward projector using ray tracing parameters :=
 end forward projector using ray tracing parameters := 
 back projector type := Interpolation
 back projector using interpolation parameters :=
 end back projector using interpolation parameters := 
end projector pair using separate projectors parameters := 

;Bin Normalisation type:=None
; if the next parameter is disabled, 
; it default to an image full of 1s.
; this will be wrong however
; change to STIR 2.x default for compatibility 
use subset sensitivities:=0
sensitivity filename:= my_RPTsens_seg4.hv
recompute sensitivity:=1

end PoissonLogLikelihoodWithLinearModelForMeanAndProjData Parameters:=

output filename prefix := my_test_image
; if the next parameter is disabled, 
; it default to an image full of 1s.
; this funny value is just for testing if you can read an initial image
initial estimate:= RPTsens_seg4.hv
enforce initial positivity condition:=0

number of subsets:= 12
start at subset:= 1
number of subiterations:= 1
start at subiteration number:=2
save estimates at subiteration intervals:= 1

END :=
