FBP2DParameters :=

input file := input.hs
output filename prefix := out/FBP2D_psfno_doino_attno_maskno

; output image parameters
zoom := 2
xy output image size (in pixels) := 184
z output image size (in pixels) := 230

Back Projector type:= matrix
  Back Projector Using Matrix Parameters :=
    Matrix type := Pinhole SPECT UB
    Projection Matrix By Bin Pinhole SPECT UB Parameters:=

        ;Maximum number of sigmas to consider in PSF calculation (typically 1.5 - 2.5)
        maximum number of sigmas := 2.0

        ; Spatial high resolution in which to sample distributions (typically 0.001 - 0.0001)
        spatial resolution PSF := 0.001

        ; Subsampling factor to compute convolutions for mid resolution. This reduces temporally the PSF resolution to
        ; perform more accurate calculus and then down sample the final PSF to the bin size (typically 1 - 8)
        subsampling factor PSF := 1

        ;  Detector and collimator parameter files
        detector file := detector.txt
        collimator file := collimator.txt

        ;Correction for intrinsic PSF { Yes // No }
        psf correction := no

        ; Correction for depth of impact { Yes // No }
        doi correction := no

        ; Attenuation correction { Simple // Full // No }
        attenuation type := no  
        ; Values in attenuation map in cm-1
        attenuation map := 

        ; Voxels not belonging to the cylinder defined by this radius are masked by default.
        object radius (cm) := 2.3
        ; In case of explicit mask.
        mask file := 
        ; If no mask file is set, we can either compute it from the attenuation image or the object radius
        mask from attenuation map := 0

        ; no point in keeping things in memory as FBP runs the projector only once
        keep all views in cache := ${CACHEALLVIEWS3D}

    End Projection Matrix By Bin Pinhole SPECT UB Parameters:=
  End Back Projector Using Matrix Parameters :=
end:=
